---
API: 2.1
OpenSesame: 3.2.7
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos "1,1"
set pygame_hwsurface yes
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Administrador/Documents/My Experiments/Opensesame/ExperimentoEmociones"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad Alegria
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[alegria]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Alegria_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[alegria]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Alegria_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[alegria]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Apertar
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Apertar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Apertar_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Apertar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Apertar_1_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Apertar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Apertar_2
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Apertar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Deboche
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[deboche]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Deboche_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[deboche]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Deboche_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[deboche]" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script DefineVariable
	set description "Executes Python code"
	___run__
	# rand = 0
	var.RandomVar = 0
	__end__
	set _prepare ""

define inline_script DefineVariable_2
	set description "Executes Python code"
	___run__
	# rand = 0
	var.RandomVar = 0
	__end__
	set _prepare ""

define pygaze_stop_recording DesligaRastreador
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording DesligaRastreador_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sequence Ensaios
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run LigaRastreador always
	run MessageSMI always
	run WebCamForeground always
	run Alegria "[RandomVar] = 1"
	run Nojo "[RandomVar]=2"
	run Tristeza "[RandomVar] = 3"
	run Deboche "[RandomVar] = 4"
	run Raiva "[RandomVar] = 5"
	run Surpresa "[RandomVar] = 6"
	run Medo "[RandomVar] = 7"
	run new_pygaze_log always
	run DesligaRastreador always

define sequence Ensaios_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run LigaRastreador_1 always
	run MessageSMI_1 always
	run WebCamForeground_1 always
	run Alegria_1 "[RandomVar] = 1"
	run Nojo_1 "[RandomVar]=2"
	run Tristeza_1 "[RandomVar] = 3"
	run Deboche_1 "[RandomVar] = 4"
	run Raiva_1 "[RandomVar] = 5"
	run Surpresa_1 "[RandomVar] = 6"
	run Medo_1 "[RandomVar] = 7"

define sequence Ensaios_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run LigaRastreador_2 always
	run MessageSMI_2 always
	run WebCamForeground_2 always
	run Alegria_2 "[RandomVar] = 4"
	run Nojo_2 "[RandomVar] = 6"
	run Tristeza_2 "[RandomVar] = 3"
	run Deboche_2 "[RandomVar] = 2"
	run Raiva_2 "[RandomVar] = 1"
	run Surpresa_2 "[RandomVar] = 5"
	run Medo_2 "[RandomVar] = 7"
	run new_pygaze_log_1 always
	run DesligaRastreador_1 always

define sequence Ensayo1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run IncrementaVariable always
	run InstRelaxarPrimeraVez "[RandomVar]=1"
	run OpenSesameForeground "[RandomVar]>1"
	run IntrPronto "[RandomVar]>1"
	run IntsRelaxarOutras "[RandomVar]>1"
	run Apertar always
	run Relaxe always
	run MaisUma always
	run Apertar_1 always
	run Relaxe_1 always
	run InstNojo "[RandomVar]=2"
	run InstAlegria "[RandomVar] = 1"
	run InstTristeza "[RandomVar]=3"
	run IntDeboche "[RandomVar]=4"
	run InstRaiva "[RandomVar]=5"
	run InsSurpresa "[RandomVar]=6"
	run InstMedo "[RandomVar]=7"
	run Fixacao always
	run new_logger_1 always
	run Sonido always
	run Estimulos always

define sequence Ensayo2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run IncrementaVariable_1 always
	run InstRelaxarPrimeraVez_1 "[RandomVar]=1"
	run OpenSesameForeground_2 "[RandomVar]>1"
	run IntrPronto_1 "[RandomVar]>1"
	run IntsRelaxarOutras_1 "[RandomVar]>1"
	run Apertar_2 always
	run Relaxe_2 always
	run MaisUma_1 always
	run Apertar_1_1 always
	run Relaxe_1_2 always
	run InstNojo_1 "[RandomVar]=6"
	run InstAlegria_1 "[RandomVar] = 4"
	run InstTristeza_1 "[RandomVar]=3"
	run IntDeboche_1 "[RandomVar]=2"
	run InstRaiva_1 "[RandomVar]=1"
	run InsSurpresa_1 "[RandomVar]=5"
	run InstMedo_1 "[RandomVar]=7"
	run Fixacao_1 always
	run new_logger_1 always
	run Sonido_1 always
	run Estimulos_2 always

define loop Estimulos
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 nr 1
	setcycle 0 alegria "images/Neutro.png"
	setcycle 0 nojo "images/Neutro.png"
	setcycle 0 tristeza "images/Neutro.png"
	setcycle 0 deboche "images/Neutro.png"
	setcycle 0 raiva "images/Neutro.png"
	setcycle 0 surpresa "images/Neutro.png"
	setcycle 0 medo "images/Neutro.png"
	setcycle 1 nr 2
	setcycle 1 alegria "images/Alegria1.png"
	setcycle 1 nojo "images/Nojo1.png"
	setcycle 1 tristeza "images/Tristeza1.png"
	setcycle 1 deboche "images/Deboche1.png"
	setcycle 1 raiva "images/Raiva1.png"
	setcycle 1 surpresa "images/Sorpresa1.png"
	setcycle 1 medo "images/Medo1.png"
	setcycle 2 nr 3
	setcycle 2 alegria "images/Alegria2.png"
	setcycle 2 nojo "images/Nojo2.png"
	setcycle 2 tristeza "images/Tristeza2.png"
	setcycle 2 deboche "images/Deboche2.png"
	setcycle 2 raiva "images/Raiva2.png"
	setcycle 2 surpresa "images/Sorpresa2.png"
	setcycle 2 medo "images/Medo2.png"
	setcycle 3 nr 4
	setcycle 3 alegria "images/Alegria3.png"
	setcycle 3 nojo "images/Nojo3.png"
	setcycle 3 tristeza "images/Tristeza3.png"
	setcycle 3 deboche "images/Deboche3.png"
	setcycle 3 raiva "images/Raiva3.png"
	setcycle 3 surpresa "images/Sorpresa3.png"
	setcycle 3 medo "images/Medo3.png"
	setcycle 4 nr 5
	setcycle 4 alegria "images/Alegria4.png"
	setcycle 4 nojo "images/Nojo4.png"
	setcycle 4 tristeza "images/Tristeza4.png"
	setcycle 4 deboche "images/Deboche4.png"
	setcycle 4 raiva "images/Raiva4.png"
	setcycle 4 surpresa "images/Sorpresa4.png"
	setcycle 4 medo "images/Medo4.png"
	run Ensaios

define loop Estimulos_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 nr 1
	setcycle 0 alegria "images/Neutro.png"
	setcycle 0 nojo "images/Neutro.png"
	setcycle 0 tristeza "images/Neutro.png"
	setcycle 0 deboche "images/Neutro.png"
	setcycle 0 raiva "images/Neutro.png"
	setcycle 0 surpresa "images/Neutro.png"
	setcycle 0 medo "images/Neutro.png"
	setcycle 1 nr 2
	setcycle 1 alegria "images/Alegria1.png"
	setcycle 1 nojo "images/Nojo1.png"
	setcycle 1 tristeza "images/Tristeza1.png"
	setcycle 1 deboche "images/Deboche1.png"
	setcycle 1 raiva "images/Raiva1.png"
	setcycle 1 surpresa "images/Sorpresa1.png"
	setcycle 1 medo "images/Medo1.png"
	setcycle 2 nr 3
	setcycle 2 alegria "images/Alegria2.png"
	setcycle 2 nojo "images/Nojo2.png"
	setcycle 2 tristeza "images/Tristeza2.png"
	setcycle 2 deboche "images/Deboche2.png"
	setcycle 2 raiva "images/Raiva2.png"
	setcycle 2 surpresa "images/Sorpresa2.png"
	setcycle 2 medo "images/Medo2.png"
	setcycle 3 nr 4
	setcycle 3 alegria "images/Alegria3.png"
	setcycle 3 nojo "images/Nojo3.png"
	setcycle 3 tristeza "images/Tristeza3.png"
	setcycle 3 deboche "images/Deboche3.png"
	setcycle 3 raiva "images/Raiva3.png"
	setcycle 3 surpresa "images/Sorpresa3.png"
	setcycle 3 medo "images/Medo3.png"
	setcycle 4 nr 5
	setcycle 4 alegria "images/Alegria4.png"
	setcycle 4 nojo "images/Nojo4.png"
	setcycle 4 tristeza "images/Tristeza4.png"
	setcycle 4 deboche "images/Deboche4.png"
	setcycle 4 raiva "images/Raiva4.png"
	setcycle 4 surpresa "images/Sorpresa4.png"
	setcycle 4 medo "images/Medo4.png"
	run Ensaios_1

define loop Estimulos_2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 nr 1
	setcycle 0 alegria "images/Neutro.png"
	setcycle 0 nojo "images/Neutro.png"
	setcycle 0 tristeza "images/Neutro.png"
	setcycle 0 deboche "images/Neutro.png"
	setcycle 0 raiva "images/Neutro.png"
	setcycle 0 surpresa "images/Neutro.png"
	setcycle 0 medo "images/Neutro.png"
	setcycle 1 nr 2
	setcycle 1 alegria "images/Alegria1.png"
	setcycle 1 nojo "images/Nojo1.png"
	setcycle 1 tristeza "images/Tristeza1.png"
	setcycle 1 deboche "images/Deboche1.png"
	setcycle 1 raiva "images/Raiva1.png"
	setcycle 1 surpresa "images/Sorpresa1.png"
	setcycle 1 medo "images/Medo1.png"
	setcycle 2 nr 3
	setcycle 2 alegria "images/Alegria2.png"
	setcycle 2 nojo "images/Nojo2.png"
	setcycle 2 tristeza "images/Tristeza2.png"
	setcycle 2 deboche "images/Deboche2.png"
	setcycle 2 raiva "images/Raiva2.png"
	setcycle 2 surpresa "images/Sorpresa2.png"
	setcycle 2 medo "images/Medo2.png"
	setcycle 3 nr 4
	setcycle 3 alegria "images/Alegria3.png"
	setcycle 3 nojo "images/Nojo3.png"
	setcycle 3 tristeza "images/Tristeza3.png"
	setcycle 3 deboche "images/Deboche3.png"
	setcycle 3 raiva "images/Raiva3.png"
	setcycle 3 surpresa "images/Sorpresa3.png"
	setcycle 3 medo "images/Medo3.png"
	setcycle 4 nr 5
	setcycle 4 alegria "images/Alegria4.png"
	setcycle 4 nojo "images/Nojo4.png"
	setcycle 4 tristeza "images/Tristeza4.png"
	setcycle 4 deboche "images/Deboche4.png"
	setcycle 4 raiva "images/Raiva4.png"
	setcycle 4 surpresa "images/Sorpresa4.png"
	setcycle 4 medo "images/Medo4.png"
	run Ensaios_2

define sketchpad Fim
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Fim.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Fixacao
	set duration 300
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Fixacao_1
	set duration 300
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad IAPS_show
	set reset_variables no
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="[IAPS]" scale=1 show_if=always x=0 y=0 z_index=0

define loop ImagensIAPS
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 IAPS "images/5760.jpg"
	setcycle 0 nr2 1
	setcycle 1 IAPS "images/2260.jpg"
	setcycle 1 nr2 2
	setcycle 2 IAPS "images/2080.jpg"
	setcycle 2 nr2 3
	setcycle 3 IAPS "images/8190.jpg"
	setcycle 3 nr2 4
	setcycle 4 IAPS "images/2040.jpg"
	setcycle 4 nr2 5
	setcycle 5 IAPS "images/2070.jpg"
	setcycle 5 nr2 6
	setcycle 6 IAPS "images/1440.jpg"
	setcycle 6 nr2 7
	setcycle 7 IAPS "images/2050.jpg"
	setcycle 7 nr2 8
	setcycle 8 IAPS "images/1460.jpg"
	setcycle 8 nr2 9
	setcycle 9 IAPS "images/5833.jpg"
	setcycle 9 nr2 10
	run SequenciaIAPS

define loop ImagensIAPS_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 nr4 1
	setcycle 0 IAPS_2 "images/8030.jpg"
	setcycle 1 nr4 2
	setcycle 1 IAPS_2 "images/8492.jpg"
	setcycle 2 nr4 3
	setcycle 2 IAPS_2 "images/8185.jpg"
	setcycle 3 nr4 4
	setcycle 3 IAPS_2 "images/5621.jpg"
	setcycle 4 nr4 5
	setcycle 4 IAPS_2 "images/8179.jpg"
	setcycle 5 nr4 6
	setcycle 5 IAPS_2 "images/8160.jpg"
	setcycle 6 nr4 7
	setcycle 6 IAPS_2 "images/8186.jpg"
	setcycle 7 nr4 8
	setcycle 7 IAPS_2 "images/8370.jpg"
	setcycle 8 nr4 9
	setcycle 8 IAPS_2 "images/8080.jpg"
	setcycle 9 nr4 10
	setcycle 9 IAPS_2 "images/8180"
	run Sequencia_IAPS2

define inline_script IncrementaVariable
	set description "Executes Python code"
	___run__
	# import random
	#rand = random.randint(1,7)
	var.RandomVar = var.RandomVar + 1
	# self.experiment.items["Estimulos"].repeat = 4
	__end__
	set _prepare ""

define inline_script IncrementaVariable_1
	set description "Executes Python code"
	___run__
	# import random
	#rand = random.randint(1,7)
	var.RandomVar = var.RandomVar + 1
	# self.experiment.items["Estimulos"].repeat = 4
	__end__
	set _prepare ""

define sketchpad InsSurpresa
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstSurpresa.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InsSurpresa_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstSurpresa.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst10
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst10.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst11
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst11.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst2.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst3.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst4
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst4.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst5
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst5.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst6
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst6.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst7.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst8
	set duration 1000
	set description "Displays stimuli"
	draw image center=1 file="images/Inst8.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst8b
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst8b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst9
	set duration 1000
	set description "Displays stimuli"
	draw image center=1 file="images/Inst9.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Inst9b
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/Inst9b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstAlegria
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstAlegria.png" scale=1.01 show_if=always x=0 y=0 z_index=0

define sketchpad InstAlegria_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstAlegria.png" scale=1.01 show_if=always x=0 y=0 z_index=0

define sketchpad InstMedo
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstMedo.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstMedo_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstMedo.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstNojo
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstNojo.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstNojo_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstNojo.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstRaiva
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRaiva.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstRaiva_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRaiva.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstRelaxarPrimeraVez
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar_Primeira.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstRelaxarPrimeraVez_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar_Primeira.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstTristeza
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstTristeza.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstTristeza_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstTristeza.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Instr1
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Template <i>Experimento</i>" x=0 y=0 z_index=0
	draw image center=1 file="images/Inst1.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstrucoesIAPS
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar2.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad InstrucoesIAPS_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar2.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntDeboche
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstDeboche.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntDeboche_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="images/InstDeboche.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntrPronto
	set duration 1000
	set description "Displays stimuli"
	draw image center=1 file="images/InstPronto.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntrPronto_1
	set duration 1000
	set description "Displays stimuli"
	draw image center=1 file="images/InstPronto.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntsRelaxarOutras
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar1.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad IntsRelaxarOutras_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/InstRelaxar1.png" scale=1 show_if=always x=0 y=0 z_index=0

define pygaze_start_recording LigaRastreador
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording LigaRastreador_1
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording LigaRastreador_2
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define sketchpad MaisUma
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/InstMaisUma.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad MaisUma_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/InstMaisUma.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Medo
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[medo]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Medo_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[medo]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Medo_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[medo]" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script MessageSMI
	set description "Executes Python code"
	___run__
	#exp.pygaze_eyetracker.send_message("Emotion, intesity %s, %s " %(var.RandomVar, var.nr))
	__end__
	set _prepare ""

define inline_script MessageSMI_1
	set description "Executes Python code"
	___run__
	exp.pygaze_eyetracker.send_message("Emotion, intesity %s, %s " %(var.RandomVar, var.nr))
	__end__
	set _prepare ""

define inline_script MessageSMI_2
	set description "Executes Python code"
	___run__
	#exp.pygaze_eyetracker.send_message("Emotion, intesity %s, %s " %(var.RandomVar, var.nr))
	__end__
	set _prepare ""

define sketchpad Nojo
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[nojo]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Nojo_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[nojo]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Nojo_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[nojo]" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script OpenSesameForeground
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define inline_script OpenSesameForeground_1
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define inline_script OpenSesameForeground_1_1
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define inline_script OpenSesameForeground_2
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define inline_script OpenSesameForeground_3
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define loop PresentacaoImagens
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sketchpad Raiva
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[raiva]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Raiva_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[raiva]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Raiva_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[raiva]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Relaxe
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Relaxar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Relaxe_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Relaxar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Relaxe_1_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Relaxar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Relaxe_1_2
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Relaxar.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Relaxe_2
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="images/Relaxar.png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script RepeteEnsaios
	set description "Executes Python code"
	___run__
	# self.experiment.items["Estimulos"].repeat = 4 # Nao funcionou
	while self.get('RandomVar') < 7:
		exp.items['Ensayo1'].prepare()
		exp.items['Ensayo1'].run()
	__end__
	set _prepare ""

define inline_script RepeteEnsaios2
	set description "Executes Python code"
	___run__
	# self.experiment.items["Estimulos"].repeat = 4 # Nao funcionou
	while self.get('RandomVar') < 7:
		exp.items['Ensayo2'].prepare()
		exp.items['Ensayo2'].run()
	__end__
	set _prepare ""

define sequence SequenciaIAPS
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run IAPS_show always

define sequence Sequencia_IAPS2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad always

define sampler Sonido
	set volume 1
	set stop_after 0
	set sample "KDE-K3B-Finish-Success.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Reproducir un sonido en formato .wav o .ogg"

define sampler Sonido_1
	set volume 1
	set stop_after 0
	set sample "KDE-K3B-Finish-Success.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Reproducir un sonido en formato .wav o .ogg"

define sketchpad Surpresa
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[surpresa]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Surpresa_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[surpresa]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Surpresa_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[surpresa]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Tristeza
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[tristeza]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Tristeza_1
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[tristeza]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Tristeza_2
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[tristeza]" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script WebCamForeground
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window = find_windows(best_match='mara')
	SetForegroundWindow(Window[0])
	__end__
	set _prepare ""

define inline_script WebCamForeground_1
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window = find_windows(best_match='mara')
	SetForegroundWindow(Window[0])
	__end__
	set _prepare ""

define inline_script WebCamForeground_2
	set description "Executes Python code"
	___run__
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window = find_windows(best_match='mara')
	SetForegroundWindow(Window[0])
	__end__
	set _prepare ""

define inline_script WebCamForeground_3
	set description "Executes Python code"
	___run__
	import time
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window = find_windows(best_match='mara')
	SetForegroundWindow(Window[0])
	time.sleep(5)
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define inline_script WebCamForeground_3_1
	set description "Executes Python code"
	___run__
	import time
	from pywinauto.findwindows import find_windows
	from pywinauto.win32functions import SetForegroundWindow
	Window = find_windows(best_match='mara')
	SetForegroundWindow(Window[0])
	time.sleep(5)
	Window2 = find_windows(title='OpenSesame (legacy backend)')
	SetForegroundWindow(Window2[0])
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run new_pygaze_init always
	run Instr1 always
	run Inst2 always
	run Inst3 always
	run Inst4 always
	run Inst5 always
	run Inst6 always
	run Inst7 always
	run Inst8 always
	run WebCamForeground_3 always
	run Inst8b always
	run Inst9 always
	run WebCamForeground_3_1 always
	run Inst9b always
	run Inst10 always
	run Inst11 always
	run DefineVariable always
	run Ensayo1 always
	run RepeteEnsaios always
	run OpenSesameForeground_1 always
	run InstrucoesIAPS always
	run new_logger_1 always
	run ImagensIAPS always
	run DefineVariable_2 always
	run Ensayo2 always
	run RepeteEnsaios2 always
	run OpenSesameForeground_1_1 always
	run InstrucoesIAPS_1 always
	run new_logger_1 always
	run ImagensIAPS_2 always
	run Fim always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	import os
	from PIL import Image, ImageDraw
	# Create a 100x100 image with PIL and draw a diagonal red line in it. See also:
	# - http://effbot.org/imagingbook/pil-index.htm
	im = Image.open('images/Neutro.png')
	im.show()
	
	# Save it as `diagonal_line.png` to the file pool
	# im.save(os.path.join(exp.pool_folder, '/home/julan/ownCloud/FederalSergipe/Projetos/Raquel/Emocoes/ExperimentoOpensesame/images/Neutro.png'))
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log no

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log no
	log response_InsSurpresa
	log response_InstAlegria
	log response_InstMedo
	log response_InstNojo
	log response_InstRaiva
	log response_InstTristeza
	log response_IntDeboche
	log response_time_InsSurpresa
	log response_time_InstAlegria
	log response_time_InstMedo
	log response_time_InstNojo
	log response_time_InstRaiva
	log response_time_InstTristeza
	log response_time_IntDeboche
	log response_InstrucoesIAPS
	log response_time_InstrucoesIAPS
	log response_InsSurpresa_1
	log response_InstAlegria_1
	log response_InstMedo_1
	log response_InstNojo_1
	log response_InstRaiva_1
	log response_InstTristeza_1
	log response_IntDeboche_1
	log response_time_InsSurpresa_1
	log response_time_InstAlegria_1
	log response_time_InstMedo_1
	log response_time_InstNojo_1
	log response_time_InstRaiva_1
	log response_time_InstTristeza_1
	log response_time_IntDeboche_1
	log response_InstrucoesIAPS_1
	log response_time_InstrucoesIAPS_1

define logger new_logger_2
	set description "Logs experimental data"
	set auto_log no
	log response_InsSurpresa_1_1
	log response_InstAlegria_1
	log response_InstMedo_1
	log response_InstNojo_1
	log response_InstRaiva_1
	log response_InstTristeza_1
	log response_IntDeboche_1
	log response_time_InsSurpresa_1
	log response_time_InstAlegria_1
	log response_time_InstMedo_1
	log response_time_InstNojo_1
	log response_time_InstRaiva_1
	log response_time_InstTristeza_1
	log response_time_IntDeboche_1

define logger new_logger_3
	set description "Logs experimental data"
	set auto_log no
	log response_InstrucoesIAPS_1
	log response_time_InstrucoesIAPS_1

define logger new_logger_4
	set description "Logs experimental data"
	set auto_log no
	log response_InstrucoesIAPS
	log response_time_InstrucoesIAPS

define pygaze_init new_pygaze_init
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "192.168.1.2"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate no
	set calbeep no
	set _logfile automatic

define pygaze_init new_pygaze_init_1
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_1
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_wait new_pygaze_wait
	set event "Saccade start"
	set description "Waits for an eye-tracker event"

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition never

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PresentacaoImagens always

define sketchpad new_sketchpad
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="[IAPS_2]" scale=1 show_if=always x=0 y=0 z_index=0

